CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:39
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:tif,tiff,flex,zvi movies
    File selection method:Order
    Number of images in each group?:1
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|
    Check image sets for unmatched or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
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    Position of this image in each group:1
    Extract metadata from where?:None
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    Channel count:3
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:DAPI
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    Channel number:3
    Rescale intensities?:No
    Load the input as images or objects?:Images
    Name this loaded image:WFA
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    Channel number:1
    Rescale intensities?:No
    Load the input as images or objects?:Images
    Name this loaded image:PV
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    Channel number:2
    Rescale intensities?:No

ImageMath:[module_num:2|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:WFA_Invert
    Image or measurement?:Image
    Select the first image:WFA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:3|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:PV_Invert
    Image or measurement?:Image
    Select the first image:PV
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:4|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DAPI_Invert
    Image or measurement?:Image
    Select the first image:DAPI
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:5|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notes:['The settings are identical to the first IdentifyPrimaryObjects, but here we identify the nuclei from Stain 2.']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
    Select the input image:WFA_Invert
    Name the primary objects to be identified:PNN
    Typical diameter of objects, in pixel units (Min,Max):5,180
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Lower outlier fraction:0
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
IdentifyPrimaryObjects:[module_num:6|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notes:['The settings are identical to the first IdentifyPrimaryObjects, but here we identify the nuclei from Stain 2.']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
    Select the input image:PV_Invert
    Name the primary objects to be identified:PV
    Typical diameter of objects, in pixel units (Min,Max):1,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Lower outlier fraction:0
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
IdentifyPrimaryObjects:[module_num:7|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notes:['The settings are identical to the first IdentifyPrimaryObjects, but here we identify the nuclei from Stain 2.']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
    Select the input image:DAPI_Invert
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):1,60
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Lower outlier fraction:0
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
MeasureImageAreaOccupied:[module_num:8|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notes:['The MeasureImageAreaOccupied module measure various statistics associated with the area taken up by a feature in an image. In this case, we are concerned with Objects1 and ColocalizedRegion. The module counts all the pixels occupied by an given object set and adds them together for the total area occupied by each stained object']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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Nuclei
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:PNN
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:PV
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Nuclei
    Name the output image:Nuclei_Colored
    Select the color format:Color
    Select the colormap:Default

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Nuclei
    Select objects to measure:PNN
    Select objects to measure:PV
    Calculate the Zernike features?:No

FilterObjects:[module_num:11|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enabled:False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
    Select the objects to filter:PNN
    Name the output objects:PNN_Filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:.98
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:1000
    Filter using a maximum measurement value?:Yes
    Maximum value:60000

FilterObjects:[module_num:12|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enabled:False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
    Select the objects to filter:cfos
    Name the output objects:PV_Filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:.4
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Perimeter
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:800

MeasureObjectSizeShape:[module_num:13|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enabled:False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
    Select objects to measure:PNN_Filtered
    Select objects to measure:PV_Filtered
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:14|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enabled:False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
    Hidden:1
    Select an image to measure:DAPI
    Select objects to measure:Nuclei

MaskObjects:[module_num:15|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
    Select objects to be masked:PNN
    Name the masked objects:MaskedPNNs
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.02
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:16|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
    Select objects to be masked:PV
    Name the masked objects:maskedPV
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.02
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:17|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
    Select objects to be masked:MaskedPNNs
    Name the masked objects:MaskedPNN_PV
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:maskedPV
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.05
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:18|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
    Select objects to be masked:maskedPV
    Name the masked objects:MaskedPV_PNN
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskedPNNs
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.05
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:19|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notes:['If we want to consider objects which touch or overlap each other are considered to be colocalized, this module establishes a ‘parent-child’ relationship between two sets of objects. A ‘parent’ object is one that touches, overlaps or encloses a ‘child’ object. Object2 objects that touch or overlap with an Object2 object are considered to be colocalized and will be assigned as a parent to a corresponding child.  All others have no children and are labeled accordingly.', '', 'In addition, the distance between object centroids may also be obtained with this module by enabling the ‘Calculate distances?’’ setting.']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enabled:False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
    Parent objects:Nuclei
    Child objects:MaskedPV
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PV_Nuclei
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
FilterObjects:[module_num:20|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enabled:False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
    Select the objects to filter:MaskedPV
    Name the output objects:Colocalized_PV_Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Parent_Nuclei
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
RelateObjects:[module_num:21|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notes:['If we want to consider objects which touch or overlap each other are considered to be colocalized, this module establishes a ‘parent-child’ relationship between two sets of objects. A ‘parent’ object is one that touches, overlaps or encloses a ‘child’ object. Object2 objects that touch or overlap with an Object2 object are considered to be colocalized and will be assigned as a parent to a corresponding child.  All others have no children and are labeled accordingly.', '', 'In addition, the distance between object centroids may also be obtained with this module by enabling the ‘Calculate distances?’’ setting.']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enabled:False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
    Parent objects:Nuclei
    Child objects:MaskedPNNs
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PNN_Nuclei
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
FilterObjects:[module_num:22|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enabled:False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
    Select the objects to filter:MaskedPNNs
    Name the output objects:Colocalized_PNN_Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Parent_Nuclei
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
RelateObjects:[module_num:23|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notes:['If we want to consider objects which touch or overlap each other are considered to be colocalized, this module establishes a ‘parent-child’ relationship between two sets of objects. A ‘parent’ object is one that touches, overlaps or encloses a ‘child’ object. Object2 objects that touch or overlap with an Object2 object are considered to be colocalized and will be assigned as a parent to a corresponding child.  All others have no children and are labeled accordingly.', '', 'In addition, the distance between object centroids may also be obtained with this module by enabling the ‘Calculate distances?’’ setting.']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enabled:False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
    Parent objects:MaskedPNNs
    Child objects:maskedcfos
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PNN_cfos_DAPI
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
FilterObjects:[module_num:24|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enabled:False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
    Select the objects to filter:PNN_cfos_DAPI
    Name the output objects:Colocalized_PNN_cfos_DAPI
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:PNN_cfos_DAPI
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Parent with most overlap
    Select the measurement to filter by:Number_Object_Number
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
DisplayDataOnImage:[module_num:25|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
    Display object or image measurements?:Object
    Select the input objects:MaskedPNNs
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:WFA
    Text color:#FA0009
    Name the output image that has the measurements displayed:PNN_Image
    Font size (points):12
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:26|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
    Display object or image measurements?:Object
    Select the input objects:maskedPV
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:PV
    Text color:#FA0013
    Name the output image that has the measurements displayed:PV_Image
    Font size (points):12
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:27|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
    Display object or image measurements?:Object
    Select the input objects:MaskedPNN_PV
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:WFA
    Text color:red
    Name the output image that has the measurements displayed:PNN_PV_Image
    Font size (points):12
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:28|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
    Display object or image measurements?:Object
    Select the input objects:MaskedPV_PNN
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:PV
    Text color:red
    Name the output image that has the measurements displayed:PV_PNN_image
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:29|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Nuclei_Colored
    Text color:#0700FE
    Name the output image that has the measurements displayed:Nuclei_Image
    Font size (points):8
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:30|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:PV_Image
    Name the output image:PV_Outline
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB1F39
    Select objects to display:maskedPV

OverlayOutlines:[module_num:31|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:PNN_Image
    Name the output image:PNN_Outline
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:green
    Select objects to display:MaskedPNNs

OverlayOutlines:[module_num:32|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:PNN_PV_Image
    Name the output image:PNN_PV
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#80FFFF
    Select objects to display:MaskedPNN_PV

OverlayOutlines:[module_num:33|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:PV_PNN_image
    Name the output image:PV_PNN
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:MaskedPV_PNN

SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:Nuclei_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Nucleus
    Saved file format:jpeg
    Output file location:Default Output Folder|C:\\Users\\uqpmayn1\\Desktop\\PhD\\Experiments_Results\\Vitamin D deficiency Experiments\\Counting RSC\\Cell Profiler\\Output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:PNN_Outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:WFA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_PNN
    Saved file format:jpeg
    Output file location:Default Output Folder|C:\\Users\\uqpmayn1\\Desktop\\PhD\\Experiments_Results\\Vitamin D deficiency Experiments\\Counting RSC\\Cell Profiler\\Output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:PV_Outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:PV
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_PV
    Saved file format:jpeg
    Output file location:Default Output Folder|C:\\Users\\uqpmayn1\\Desktop\\PhD\\Experiments_Results\\Vitamin D deficiency Experiments\\Counting RSC\\Cell Profiler\\Output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:PV_PNN
    Select method for constructing file names:From image filename
    Select image name for file prefix:PV
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_PV_PNN
    Saved file format:jpeg
    Output file location:Default Output Folder|C:\\Users\\uqpmayn1\\Desktop\\PhD\\Experiments_Results\\Vitamin D deficiency Experiments\\Counting RSC\\Cell Profiler\\Output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:PNN_PV
    Select method for constructing file names:From image filename
    Select image name for file prefix:WFA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_PNN_PV
    Saved file format:jpeg
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:39|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notes:['This module is used to export the full set of measurements obtained by the pipeline. Measurements such as object counts, colocalization percentages and area fractions are saved to a per-image file (that is, one value per image); measurements such as colocalized/non-colocalized status and centroid distances are saved to a per-object file (one value per object).']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|C:\\Users\\uqpmayn1\\Desktop\\PhD\\Experiments_Results\\Vitamin D deficiency Experiments\\Counting RSC\\Cell Profiler\\Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:PV|Location_Center_Y,PV|Location_Center_X,PV|Location_Center_Z,PV|Number_Object_Number,PV|Children_maskedPV_Count,PV|AreaShape_Perimeter,PV|AreaShape_FormFactor,PV|AreaShape_Center_Y,PV|AreaShape_Center_X,PV|AreaShape_Center_Z,PV|AreaShape_MinFeretDiameter,PV|AreaShape_Solidity,PV|AreaShape_MaxFeretDiameter,PV|AreaShape_EulerNumber,PV|AreaShape_Eccentricity,PV|AreaShape_Compactness,PV|AreaShape_Extent,PV|AreaShape_Orientation,PV|AreaShape_MedianRadius,PV|AreaShape_MaximumRadius,PV|AreaShape_MinorAxisLength,PV|AreaShape_Area,PV|AreaShape_MajorAxisLength,PV|AreaShape_MeanRadius,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:DG_PV_WFA
    Overwrite existing files without warning?:No
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